PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = (1920, 1080)
  expName = CRT
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine intro
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions

        Your task is to press the space bar when you see a dot.
    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent trial_target
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0
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    KeyboardComponent trial_key_resp
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent trial_image
      disabled = True
      image = resources/smile.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MovieComponent movie
      backend = ffpyplayer
      disabled = True
      forceEndRoutine = False
      loop = True
      movie = resources/smile gif.gif
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    DotsComponent dots
      coherence = 1.0
      dir = 0
      disabled = True
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    PanoramaComponent pan
      disabled = True
      downKey = s
      image = resources/panorama image.jfif
      inKey = up
      leftKey = a
      outKey = down
      posCtrl = mouse
      posSensitivity = 1
      rightKey = d
      smooth = True
      startVal [time (s)] = 0
      stopKey = space
      upKey = w
      zoom = 1
      zoomCtrl = wheel
      zoomSensitivity = 1
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    MouseComponent mouse
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    SliderComponent slider
      disabled = True
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text
      letterHeight = 0.05
      pos [set every repeat] = position
      startVal [time (s)] = 0.0
      text [set every repeat] = $direction
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the task.
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
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    PolygonComponent ISI_dot
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $random()+1
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('direction', 'left')]),
      OrderedDict([('direction', 'right')])]
    Routine ISI
    Routine trial
  LoopTerminator trials
  Routine end
